<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:p1="clr-namespace:Aeon.VertiGate;assembly=Aeon.VertiGate"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>GateControlPanel</Name>
        <Description>Control panel for a VertiGate device, built with Bonsai.Gui.

Buttons send one command each. The Position slider is live, so the gate follows
it. Speed, Torque and Calibration offset each have an Apply button, because
device.yml marks them non-volatile: every write reaches the flash, and the
firmware switches the motor off and on to change speed or torque.

Each slider starts at the value the device reports, and the label beside it
shows what the device holds now. Torque is masked to 7 bits by the firmware, so
the readback can differ from what you sent.

This panel has no device of its own. Open GateControl.bonsai, which owns the
device, and set the port there. Use the Harp port, not the REPL port.

Build the package first, or Bonsai cannot load this file:
  dotnet pack software/Aeon.VertiGate.sln -c Release</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Lower down</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Lower down</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Down</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Raise up</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Raise up</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Up</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Calibrate</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Calibrate</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Calibrate</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Stop</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Stop</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Stop</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Enable motor</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Enable motor</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Enable</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Disable motor</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Disable motor</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Disable</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Commands</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>3</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:SliderBuilder">
              <gui:Name>Position</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 10pt, style=Bold</gui:Font>
              <gui:Minimum>0</gui:Minimum>
              <gui:Maximum>255</gui:Maximum>
              <gui:DecimalPlaces>0</gui:DecimalPlaces>
              <gui:Value>125</gui:Value>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>Position</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Position Control</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:Speed" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CurrentSpeed</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:SliderBuilder">
              <gui:Name>Speed</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Minimum>0</gui:Minimum>
              <gui:Maximum>255</gui:Maximum>
              <gui:DecimalPlaces>0</gui:DecimalPlaces>
              <gui:Value>200</gui:Value>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Speed</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Apply Speed</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Apply Speed</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ApplySpeed</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentSpeed</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>Speed readback</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>200</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Speed</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>3</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>70</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>20</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>10</gui:Width>
                </gui:ColumnStyle>
              </gui:ColumnStyles>
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>Speed</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Speed Control</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:Torque" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CurrentTorque</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:SliderBuilder">
              <gui:Name>Torque</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Minimum>0</gui:Minimum>
              <gui:Maximum>127</gui:Maximum>
              <gui:DecimalPlaces>0</gui:DecimalPlaces>
              <gui:Value>40</gui:Value>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Torque</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Apply Torque</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Apply Torque</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ApplyTorque</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentTorque</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>Torque readback</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>40</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Torque</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>3</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>70</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>20</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>10</gui:Width>
                </gui:ColumnStyle>
              </gui:ColumnStyles>
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>Torque</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Torque Control</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:CalibrationOffset" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CurrentCalibrationOffset</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:SliderBuilder">
              <gui:Name>Calibration offset</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Minimum>-128</gui:Minimum>
              <gui:Maximum>127</gui:Maximum>
              <gui:DecimalPlaces>0</gui:DecimalPlaces>
              <gui:Value>0</gui:Value>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CalibrationOffset</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>ApplyCalibrationOffset</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Apply Calibration Offset</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ApplyCalibrationOffset</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentCalibrationOffset</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>Calibration offset readback</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>0</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Calibration offset</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>3</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>70</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>20</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>10</gui:Width>
                </gui:ColumnStyle>
              </gui:ColumnStyles>
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>CallibrationOffset</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>CallibrationOffset</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Settings</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>4</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Gate Events:</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Gate control:</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:GateState" />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Gate States:</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:MotorState" />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Motor States:</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Error</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Format">
              <Format>Refused: address {0}, {1}</Format>
              <Selector>Address,MessageType</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Gate Error:</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>DeviceStreams</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>4</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>VertiGate</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>ApplyCalibrationOffset</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CalibrationOffset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:CalibrationOffset" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ApplyTorque</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Torque</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:Torque" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ApplySpeed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Speed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:Speed" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:TargetPosition" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Disable</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateControlPayload">
                <p1:Control>DisableMotor</p1:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Enable</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateControlPayload">
                <p1:Control>EnableMotor</p1:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateControlPayload">
                <p1:Control>Stop</p1:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Calibrate</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateControlPayload">
                <p1:Control>Calibrate</p1:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Up</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateTargetPositionPayload">
                <p1:TargetPosition>255</p1:TargetPosition>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Down</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateTargetPositionPayload">
                <p1:TargetPosition>0</p1:TargetPosition>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="18" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="18" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="18" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="18" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="18" Label="Source5" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source6" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="84" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="82" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="40" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="40" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source3" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="82" Label="Source2" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source2" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="59" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="59" Label="Source2" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source3" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="62" To="82" Label="Source3" />
            <Edge From="63" To="64" Label="Source1" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="66" Label="Source1" />
            <Edge From="66" To="67" Label="Source2" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="78" Label="Source1" />
            <Edge From="70" To="71" Label="Source1" />
            <Edge From="71" To="72" Label="Source1" />
            <Edge From="72" To="78" Label="Source2" />
            <Edge From="73" To="74" Label="Source1" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="76" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source3" />
            <Edge From="78" To="79" Label="Source1" />
            <Edge From="79" To="80" Label="Source1" />
            <Edge From="80" To="81" Label="Source1" />
            <Edge From="81" To="82" Label="Source4" />
            <Edge From="82" To="83" Label="Source1" />
            <Edge From="83" To="84" Label="Source2" />
            <Edge From="84" To="85" Label="Source1" />
            <Edge From="85" To="114" Label="Source1" />
            <Edge From="86" To="87" Label="Source1" />
            <Edge From="87" To="88" Label="Source1" />
            <Edge From="88" To="89" Label="Source1" />
            <Edge From="89" To="112" Label="Source1" />
            <Edge From="90" To="91" Label="Source1" />
            <Edge From="91" To="92" Label="Source1" />
            <Edge From="92" To="93" Label="Source1" />
            <Edge From="93" To="112" Label="Source2" />
            <Edge From="94" To="95" Label="Source1" />
            <Edge From="95" To="96" Label="Source1" />
            <Edge From="96" To="97" Label="Source1" />
            <Edge From="97" To="98" Label="Source1" />
            <Edge From="98" To="104" Label="Source1" />
            <Edge From="99" To="100" Label="Source1" />
            <Edge From="100" To="101" Label="Source1" />
            <Edge From="101" To="102" Label="Source1" />
            <Edge From="102" To="103" Label="Source1" />
            <Edge From="103" To="104" Label="Source2" />
            <Edge From="104" To="105" Label="Source1" />
            <Edge From="105" To="112" Label="Source3" />
            <Edge From="106" To="107" Label="Source1" />
            <Edge From="107" To="108" Label="Source1" />
            <Edge From="108" To="109" Label="Source1" />
            <Edge From="109" To="110" Label="Source1" />
            <Edge From="110" To="111" Label="Source1" />
            <Edge From="111" To="112" Label="Source4" />
            <Edge From="112" To="113" Label="Source1" />
            <Edge From="113" To="114" Label="Source2" />
            <Edge From="114" To="115" Label="Source1" />
            <Edge From="116" To="118" Label="Source1" />
            <Edge From="117" To="118" Label="Source2" />
            <Edge From="118" To="119" Label="Source1" />
            <Edge From="119" To="120" Label="Source1" />
            <Edge From="120" To="121" Label="Source1" />
            <Edge From="122" To="124" Label="Source1" />
            <Edge From="123" To="124" Label="Source2" />
            <Edge From="124" To="125" Label="Source1" />
            <Edge From="125" To="126" Label="Source1" />
            <Edge From="126" To="127" Label="Source1" />
            <Edge From="128" To="130" Label="Source1" />
            <Edge From="129" To="130" Label="Source2" />
            <Edge From="130" To="131" Label="Source1" />
            <Edge From="131" To="132" Label="Source1" />
            <Edge From="132" To="133" Label="Source1" />
            <Edge From="134" To="135" Label="Source1" />
            <Edge From="135" To="136" Label="Source1" />
            <Edge From="136" To="137" Label="Source1" />
            <Edge From="138" To="139" Label="Source1" />
            <Edge From="139" To="140" Label="Source1" />
            <Edge From="141" To="142" Label="Source1" />
            <Edge From="142" To="143" Label="Source1" />
            <Edge From="144" To="145" Label="Source1" />
            <Edge From="145" To="146" Label="Source1" />
            <Edge From="147" To="148" Label="Source1" />
            <Edge From="148" To="149" Label="Source1" />
            <Edge From="150" To="151" Label="Source1" />
            <Edge From="151" To="152" Label="Source1" />
            <Edge From="153" To="154" Label="Source1" />
            <Edge From="154" To="155" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>